PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Mental Rotation
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Greeting
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    TextComponent greeting1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press LEFT if picture is normal
        Press RIGHT if picture is rotated

        Press SPACE to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent logos
      flipHoriz = True
      flipVert = True
      image [set every repeat] = $image
      ori [set every repeat] = orientation
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    KeyboardComponent response
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine thanks
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    TextComponent thankyou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thank You for Participating!
        Have a Good Day :)
Flow
  Routine Greeting
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = logos.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'image': 'adidas 1', 'orientation': 0, 'corrAns': 'left'},
      {'image': 'fb 1', 'orientation': 0, 'corrAns': 'left'},
      {'image': 'google 1', 'orientation': 0, 'corrAns': 'left'},
      {'image': 'twitter 1', 'orientation': 0, 'corrAns': 'left'},
      {'image': 'ig 1', 'orientation': 0, 'corrAns': 'left'},
      {'image': 'CN 1', 'orientation': 0, 'corrAns': 'left'},
      {'image': 'twitch 1', 'orientation': 0, 'corrAns': 'left'},
      {'image': 'adidas 2', 'orientation': 0, 'corrAns': 'right'},
      {'image': 'fb 2', 'orientation': 20, 'corrAns': 'right'},
      {'image': 'google 2', 'orientation': 40, 'corrAns': 'right'},
      {'image': 'twitter 2', 'orientation': 60, 'corrAns': 'right'},
      {'image': 'ig 2', 'orientation': 80, 'corrAns': 'right'},
      {'image': 'CN 2', 'orientation': 100, 'corrAns': 'right'},
      {'image': 'twitch 2', 'orientation': 120, 'corrAns': 'right'},
      {'image': 'UF 1', 'orientation': 0, 'corrAns': 'left'},
      {'image': 'UF 2', 'orientation': 140, 'corrAns': 'right'},
      {'image': 'UF 3', 'orientation': 90, 'corrAns': 'right'},
      {'image': 'UF 4', 'orientation': 10, 'corrAns': 'right'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
